PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = norm
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = demo
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        import pymot

        track_filename = "../examples/data/T220.csv"
      Begin Routine:
        T = pymot.Track()
        T.load_from_csv(track_filename)
        T.scale(0.1)
        P = pymot.Puppeteer()
        P.track = T
      Each Frame:
        if t >= 0 and t <= 5:
            (x, y) = P.position_for_time(t)
            #print x[:,0]
            #print (float(x[:,0]), float(y[:,0]))
            o1.pos = (float(x[:,0]), float(y[:,0]))
            p1.pos = (float(x[:,1]), float(y[:,1]))
            pass
    PolygonComponent o1
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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    ImageComponent p1
      startVal [time (s)] = 0.0
      image = img/icons8-happy-50.png
      size = (0.1, 0.1)
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Flow
  Routine trial
